// Protocol PlateOutReactionInput takes in an array of TransformedCells (i.e. recovered cells) from another element (e.g. AutTransformation_multi) and performs a plate out reaction onto plates of the users choice
protocol AutoPlateOut_Multi

// Place golang packages to import here
import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/execute"
)

// Parameters to this protocol
Parameters (
	AgarPlateNumber int //optionally specify the number of agar plates to begin counting from (Default = 1)
	IncubationTemp wunit.Temperature //set Incubation temperature
	IncubationTime wunit.Time //set Incubation time
	NumberofReplicates int //specify number of technical replicates to plate out
	PlateOutLiquidPolicy PolicyName //optionally specify the liquid handling policy to use when plating out (Default = PlateOut). Can change
	PlateOutVolumes map[string][]Volume //specify the plate out volume. If Dilution is required, this volume will be made up to with the transformed cells and the diluent
  SpecifyReactionOrder []string
	WellsAlreadyUsed int //optionally specify if some wells have already been used in the Agar Plate (i.e. if a plate is being used for multiple tranformations, or an overlay)
)

// Output data of this protocol
Data (
)

// Physical inputs to this protocol
Inputs (
	AgarPlate *LHPlate //the output plate type, which can be any plate within the Antha library (Default = falcon6wellAgar)
	TransformedCells []*LHComponent //the transformed cells that can be inputted from another protocol (e.g.  AutTransformation_multi)
)

// Physical outputs to this protocol
Outputs (
	PlatedCultures []*LHComponent //the plated cultures are outputted as an array which can be fed into other protocols in the Antha workflow
)

// Conditions to run on startup
Setup {

}

// The core process for this protocol. These steps are executed for each input.
Steps {
	//setup counter to track WellsAlreadyUsed
	var counter int = WellsAlreadyUsed
	var platecounter int = AgarPlateNumber

	//range through the inputted array and perform the PlateOutTest protocol
	for _, plateout := range TransformedCells {

		var reactionname string = plateout.CName

		var volumes []Volume

		if value, found := PlateOutVolumes[reactionname]; found {
			volumes = value
		} else if value, found := PlateOutVolumes["default"]; found {
			volumes = value
		} else {
			Errorf("No plate out volumes set for %s. Please set these", reactionname)
		}

		for _, plateoutvols := range volumes {

				// Run PlateOut element
				result := RunSteps(PlateOutTest,
						Parameters{
							AgarPlateNumber: platecounter,
							IncubationTemp: IncubationTemp,
							IncubationTime: IncubationTime,
			        NumberofReplicates: NumberofReplicates,
							PlateOutVolume: plateoutvols,
			        PlateOutLiquidPolicy: PlateOutLiquidPolicy,
							WellsAlreadyUsed: counter,
										},Inputs {
							TransformedCells: plateout,
							AgarPlate: AgarPlate,
										})
					for _, plateoutorder := range result.Outputs.PlatedCultures{
						PlatedCultures = append(PlatedCultures, plateoutorder)
					}

					//increase counter
					counter = result.Outputs.WellsUsed
					platecounter = result.Outputs.TransformedPlateNumber
		}
	}
}

// Run after controls and a steps block are completed to post process any data
// and provide downstream results
Analysis {

}

// A block of tests to perform to validate that the sample was processed
// correctly. Optionally, destructive tests can be performed to validate
// results on a dipstick basis
Validation {

}
