// Protocol for resuspending freeze dried DNA with a diluent
protocol PairOligos_multiple

// we need to import the wtype package to use the LHComponent type
// the mixer package is required to use the Sample function
import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	
)


// Input parameters for this protocol (data)
Parameters (
  	PartConcentrations map[string]Concentration
	StockConcentration Concentration
	FwdOligotoRevOligoMap map[string]string
	ConcentrationSetPoint Concentration
	TotalVolume Volume
	IncubationTemp Temperature
	IncubationTime Time
)

Data (
)

Inputs (
	DNAPartsMap map[string]*wtype.LHComponent
	Diluent *wtype.LHComponent
	Plate *wtype.LHPlate
)

Outputs (
	OligoPairsMap map[string]*wtype.LHComponent
	OligoPairs []*wtype.LHComponent
)

Requirements {
}

Setup {
}


Steps {

	//var nilconcmap map[string]wunit.Concentration
	var nilconc wunit.Concentration

	if PartConcentrations == nil  && StockConcentration != nilconc {
		PartConcentrations = make(map[string]wunit.Concentration)
		for key, _ := range DNAPartsMap {
		PartConcentrations[key] = StockConcentration
		}
	}

	// initialise output map 
	OligoPairsMap = make(map[string]*wtype.LHComponent)
	
	// get all well locations for plate
	var welllocations []string = Plate.AllWellPositions(wtype.BYCOLUMN)

	// initialise a counter
	var counter int = 0
	var platenum int = 1
	// range through Oligo pairs map
	for fwd, rev := range  FwdOligotoRevOligoMap{

	// calculate volume to add for target conc
	fwdoligoVol, err := wunit.VolumeForTargetConcentration(ConcentrationSetPoint, PartConcentrations[fwd], TotalVolume)  

	if err != nil {
		Errorf(err.Error())
	}
	
	// calculate volume to add for target conc
	revoligoVol, err := wunit.VolumeForTargetConcentration(ConcentrationSetPoint, PartConcentrations[rev], TotalVolume)  

	if err != nil {
		Errorf(err.Error())
	}

	// next well 
	well := welllocations[counter]


	// run PairOligos Antha element recursively
	result := RunSteps(PairOligos,
	Parameters{
		TotalVolume: TotalVolume,
		IncubationTemp: IncubationTemp,
		IncubationTime: IncubationTime,
		FWDOligoVolume: fwdoligoVol,
		REVOligoVolume: revoligoVol,
		Well: well,
		PlateNumber: platenum,
	},Inputs{
		FwdOligo:	DNAPartsMap[fwd],
		RevOligo:	DNAPartsMap[rev],
		Diluent: Diluent,
		Plate: Plate,
	})
	
	
	// update output solution with concentration
	pair := result.Outputs.OligoPairs
	pair.SetConcentration(ConcentrationSetPoint)
	
	// add to output map and slice
	OligoPairsMap[fwd] = pair
	OligoPairs = append(OligoPairs,pair)
	
	// increase counter to find next free well
	if counter +1 == len(welllocations){
		counter = 0
		platenum++	
	}else {
		counter++
	}
}


}

Analysis {
}


Validation {
}
