// Protocol to make a serial dilution series targeting a series of specified concentrations from a solution of known Stock concentration and a diluent.
// The next dilution in the series will always be made from the previous dilution and not from the original stock solution.
protocol SerialDilution_forConcentration


import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"	
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"strings"
	"strconv"
)

func parseConcentration(componentname string)(containsconc bool, conc wunit.Concentration, componentNameOnly string){
	
	approvedunits := wunit.UnitMap["Concentration"]
	
	fields := strings.Fields(componentname)
	var unitmatchlength int
	var longestmatchedunit string
	var valueandunit string
	
	for key, _ := range approvedunits {
		for _,field := range fields {
		if strings.Contains(field,key){
			if len(key) > unitmatchlength {
				longestmatchedunit = key
				unitmatchlength = len(key)
				valueandunit = field
				}
			}
		}
	}
	
	for _, field := range fields {
		if len(fields)== 2 && field !=  longestmatchedunit {
			componentNameOnly = field
		}
	}
	
	// if no match, return original component name
	if unitmatchlength == 0 {
		return false, conc, componentname
	}
	
	concfields := strings.Split(valueandunit,longestmatchedunit)
	
	value, err := strconv.ParseFloat(concfields[0],64)
	if err != nil{
		panic(err.Error())
		return false, conc, componentNameOnly
	}
	
	
	
	
	conc = wunit.NewConcentration(value,longestmatchedunit)
	containsconc = true
	return containsconc, conc, componentNameOnly
}
// Input parameters for this protocol (data)
Parameters (
	StartVolumeperDilution 	Volume 
	StockConcentration		Concentration // specify a starting concentration
	TargetConcentrations  	[]Concentration// e.g. 10 would take 1 part solution to 9 parts diluent for each dilution 
	ByRow 					bool // optionally choose whether to aliqout the serial dilutions by row instead of the default by column
	WellsAlreadyUsed		int // optionally start after a specified well position if wells are allready used in the plate
)

// Data which is returned from this protocol, and data types
Data (
	AllConcentrations []Concentration
	ComponentNames []string
	WellsUsedPostRun		int
)


// Physical Inputs to this protocol with types
Inputs (
	Solution *wtype.LHComponent 
	Diluent *wtype.LHComponent
	OutPlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	Dilutions []*wtype.LHComponent
	AllDilutions []*wtype.LHComponent
)

Requirements {
	
}

// Conditions to run on startup
Setup {
	
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	allwellpositions := OutPlate.AllWellPositions(ByRow)
	
	dilutions := make([]*wtype.LHComponent,0)

	var aliquot *wtype.LHComponent
	
	// calculate solution volume
	solutionVolume,err := wunit.VolumeForTargetConcentration(TargetConcentrations[0],StockConcentration,StartVolumeperDilution)
	
		if err != nil{
			Errorf(err.Error())
		}
	
	// use same approach to work out diluent volume to add	
	diluentVolume := (wunit.CopyVolume(StartVolumeperDilution))
	
	// this time using the substract method
	diluentVolume.Subtract(solutionVolume)	
	
	// sample diluent
	diluentSample := mixer.Sample(Diluent,diluentVolume)
		
	// Ensure liquid type set to Pre and Post Mix 
	Solution.Type = wtype.LTNeedToMix
	// check if the enzyme is specified and if not mix the 
		
	// sample solution
	solutionSample := mixer.Sample(Solution,solutionVolume)
	
	// mix both samples to OutPlate
	aliquot = MixNamed(OutPlate.Type,allwellpositions[WellsAlreadyUsed], "DilutionPlate",diluentSample, solutionSample)

	var solutionname string
	
	// rename sample to include concentration
	containsconc, _, componentNameOnly := parseConcentration(Solution.CName)
	
	if containsconc{
		solutionname = componentNameOnly
	}
	
	aliquot.CName = strings.Replace(TargetConcentrations[0].ToString()," ","",-1) + " " +solutionname
	aliquot.SetConcentration(TargetConcentrations[0])
	// add to dilutions array
	dilutions = append(dilutions,aliquot)
	
	// loop through NumberOfDilutions until all serial dilutions are made
	
	var k int
	
	for k = WellsAlreadyUsed+1; k < len(TargetConcentrations); k++ {
		
			// calculate new solution volume
		solutionVolume,err := wunit.VolumeForTargetConcentration(TargetConcentrations[k],TargetConcentrations[k-1],StartVolumeperDilution)
		
			if err != nil{
				Errorf(err.Error())
			}
		
		// use same approach to work out diluent volume to add	
		diluentVolume = (wunit.CopyVolume(StartVolumeperDilution))
		
		// this time using the substract method
		diluentVolume.Subtract(solutionVolume)	
			
		// take next sample of diluent
		nextdiluentSample := mixer.Sample(Diluent, diluentVolume)
		
		nextdiluentSample = MixNamed(OutPlate.Type,allwellpositions[k], "DilutionPlate",nextdiluentSample)
		
		// Ensure liquid type set to Pre and Post Mix 
		aliquot.Type = wtype.LTNeedToMix
		
		// sample from previous dilution sample
		nextSample := mixer.Sample(aliquot, solutionVolume)
		
		// Mix sample into nextdiluent sample
		nextaliquot := Mix(nextdiluentSample,nextSample)
		
		// rename sample to include concentration
		// rename sample to include concentration
		containsconc, _, componentNameOnly := parseConcentration(Solution.CName)
		
		if containsconc{
			solutionname = componentNameOnly
		}
		nextaliquot.CName = strings.Replace(TargetConcentrations[k].ToString()," ","",-1) + " " +solutionname
		nextaliquot.SetConcentration(TargetConcentrations[k])
		// add to dilutions array 
		dilutions = append(dilutions,nextaliquot)
		// reset aliquot
		aliquot = nextaliquot
	}
		
// export as Output
Dilutions = dilutions


// export all concentrations used as export
AllDilutions = append(AllDilutions,Solution)
AllConcentrations = append(AllConcentrations, StockConcentration)

Solution.CName = strings.Replace(StockConcentration.ToString()," ","",-1) + " " +solutionname
ComponentNames = append(ComponentNames, Solution.CName)
for i, dilution := range Dilutions {
	
	AllDilutions = append(AllDilutions,dilution)
	ComponentNames = append(ComponentNames, dilution.CName)
	AllConcentrations = append(AllConcentrations, TargetConcentrations[i])
	
} 



WellsUsedPostRun = k

}
// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
	
}

