// The Aliquot element will transfer a defined liquid at defined volumes a specified number of times into a chosen plate type.
// The user has the option to premix the solution to be aliquoted if the input solution tends to sediment or separate when left to stand
// (e.g. a suspension of cells in media) or has recently been thawed. Upstream elements that produce solutions as outputs can be wired
// into the Solution parameter of this element for aliquoting. If the solution already exists in your lab or has been made manually but a definition for this solution does
// not exist in the Antha library then the AddNewLHComponent element can be used to define this solution with the output from the
// element wired into the Solution parameter of this element.
protocol Aliquot

import (
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/wutil"
)

// Input parameters for this protocol (data)
Parameters (
	// This parameter represents the volume of solution that you have in the lab available to be aliquoted. It does not represent the total volume to be aliquoted or the volume of liquid that will be used.
	SolutionVolume Volume
	// This parameter dictates the final volume each aliquot will have.
	VolumePerAliquot Volume
	// This parameter states the number of aliquots that will be made from the input Solution.
	NumberofAliquots int
	// This parameter is an optional field. If the solution to be aliquoted has components that may sink to the bottom of the solution then select this option for the solution to be premixed prior to transfer.
	PreMix bool
	// This parameter is an optional field. If you want to change the name of the input Solution for traceability then do so. If not the default name will be given as the chosen input Solution LHComponent name.
	ChangeSolutionName string
	// This parameter is an optional field. If set to true then the aliquots will be transferred to a specific named plate such that if two instances of this element are run in parallel the aliquots from both will be put on the same output plate rather than two separate output plates.
	OptimisePlateUsage bool
)

// Data which is returned from this protocol, and data types
Data ()

// Physical Inputs to this protocol with types
Inputs (
	// This Physical input will have associated properties to determine how the liquid should be handled, e.g. is your Solution water or is it Glycerol. If your physical liquid does not exist in the Antha LHComponent library then create a new one on the fly with the AddNewLHComponent element and wire the output into this input. Alternatively wire a solution made by another element into this input to be alliquoted.
	Solution *LHComponent
	// This parameter alows you to specify the type of plate you are aliquoting your Solution into. Choose from one of the available plate options from the Antha plate library.
	OutPlate *LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	// This is a list of the resulting aliquots that have been made by the element.
	Aliquots []*LHComponent
)

Requirements {

}

// Conditions to run on startup
Setup {

}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {

	number := SolutionVolume.SIValue() / VolumePerAliquot.SIValue()
	possiblenumberofAliquots, _ := wutil.RoundDown(number)
	if possiblenumberofAliquots < NumberofAliquots {
		Errorf("Not enough solution for this many aliquots")
	}

	//check if maxvolume of outplate is higher than specified aliquot volume
	if OutPlate.Welltype.MaxVolume().LessThanRounded(VolumePerAliquot, 5) {
		Errorf("Aliquot volume specified (%s) too high for well capacity (%s) of current plate (%s)", VolumePerAliquot.ToString(), OutPlate.Welltype.MaxVolume(), OutPlate.Name())
	}

	// if PreMix is selected change liquid type accordingly
	if PreMix {
		Solution.Type = wtype.LTPreMix
	}

	// if a solution name is given change the name
	if ChangeSolutionName != "" {
		Solution.CName = ChangeSolutionName
	}

	aliquots := make([]*LHComponent, 0)

	for i := 0; i < NumberofAliquots; i++ {
		if Solution.TypeName() == "dna" {
			Solution.Type = wtype.LTDoNotMix
		}
		aliquotSample := mixer.Sample(Solution, VolumePerAliquot)

		// the MixInto command is used instead of Mix to specify the plate
		// MixInto allows you to specify the exact plate to MixInto (i.e. rather than just a plate type. e.g. barcode 123214234)
		// the three input fields to the MixInto command represent
		// 1. the plate
		// 2. well location as a  string e.g. "A1" (in this case leaving it blank "" will leave the well location up to the scheduler),
		// 3. the sample or array of samples to be mixed
		var aliquot *LHComponent
		if OptimisePlateUsage {
			aliquot = MixNamed(OutPlate.Type, "", "AliquotPlate", aliquotSample)
		} else {
			aliquot = MixInto(OutPlate, "", aliquotSample)
		}
		if aliquot != nil {
			aliquots = append(aliquots, aliquot)
		}
	}
	Aliquots = aliquots
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed
//correctly. Optionally, destructive tests can be performed to validate
//results on a dipstick basis
Validation {

}
